<CompuCell3D>
    <Potts>
        <Dimensions x="1178" y="1586" z="1"/>
        <Anneal>10</Anneal>
        <Steps>800</Steps>
        <Temperature>1</Temperature>
        <Flip2DimRatio>1</Flip2DimRatio>
        <NeighborOrder>3</NeighborOrder>
    </Potts>


	<Plugin Name="CellType">
        <CellType TypeName="Medium" TypeId="0"/>
        <CellType TypeName="Fibroblast" TypeId="1"/>
	</Plugin>

    <Plugin Name="Contact">
        <Energy Type1="Medium" Type2="Medium">0</Energy>
        <Energy Type1="Fibroblast" Type2="Fibroblast" id="neighbor_dependent">100</Energy>
        <Energy Type1="Fibroblast" Type2="Medium">20</Energy>
        <NeighborOrder>3</NeighborOrder>
    </Plugin>

    <Plugin Name="VolumeLocalFlex"/>

    <Plugin Name="PixelTracker"/>

    <Plugin Name="LengthConstraint"/>

	<Plugin Name="CenterOfMass"/>

	<Plugin Name="NeighborTracker"/>

	<Plugin Name="ConnectivityGlobal">
    	<FastAlgorithm/>
	</Plugin>


   <Plugin Name="ImplicitMotility">
        <MotilityEnergyParameters CellType="Fibroblast" LambdaMotility="1"/>
   </Plugin> 


    <Steppable Type="PIFInitializer">
		<PIFName>Ctrl_A.pif</PIFName>
 	</Steppable>

</CompuCell3D>
